# Generated by Configurator on Fri May 24 13:12:19 IRDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,DCam,DemoCamera,DCam
Device,DStage,DemoCamera,DStage
Device,DXYStage,DemoCamera,DXYStage
Device,DAutoFocus,DemoCamera,DAutoFocus
Device,DShutter,DemoCamera,DShutter
Device,SimpleAutofocus,SimpleAutoFocus,SimpleAutofocus
Device,FocusMonitor,SimpleAutoFocus,FocusMonitor

# Pre-init settings for devices
Property,DCam,MaximumExposureMs,10000.0000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DCam,DHub
Parent,DStage,DHub
Parent,DXYStage,DHub
Parent,DAutoFocus,DHub
Parent,DShutter,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,DStage,0

# Roles
Property,Core,Camera,DCam
Property,Core,Shutter,DShutter
Property,Core,Focus,DStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

