# Generated by Configurator on Mon Jun 10 17:05:04 IRDT 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,BaslerCamera,BaslerPylon5,BaslerCamera
Device,ZAxis,MarzhauserLStep,ZAxis

# Pre-init settings for devices
Property,ZAxis,Port,COM9

# Pre-init settings for COM ports
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,9600
Property,COM9,DataBits,8
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Fast USB to Serial,Disable
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZAxis,0

# Roles
Property,Core,Camera,BaslerCamera
Property,Core,Focus,ZAxis
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

