# Generated by Configurator on Sat Feb 02 16:45:29 IRST 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,ITK Corvus Controller,Corvus,ITK Corvus Controller
Device,XY Stage,Corvus,XY Stage
Device,GigE camera adapter,GigECamera,GigE camera adapter

# Pre-init settings for devices
Property,ITK Corvus Controller,Port,COM3

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,57600
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,GigE camera adapter
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

